nchannels_in = 2
fragsize = 16
srate = 24000

# MHA library name
mhalib = transducers

# IO plugin library name
iolib = MHAIOJack

mha.plugin_name = overlapadd

mha.calib_in.peaklevel = [90 90]
mha.calib_out.peaklevel = [90 90]

# Set this to 4 x fragsize
mha.overlapadd.fftlen = 64

# Set this to 2 x fragsize
mha.overlapadd.wnd.len = 32

mha.overlapadd.plugin_name = mhachain

# list of plugins
mha.overlapadd.mhachain.algos = [ ... 
fftfilterbank ... 
dc ... 
combinechannels ...
]

# 2 Frequency bands
mha.overlapadd.mhachain.fftfilterbank.f = [200 2000]
# 4 Frequency bands
# mha.overlapadd.mhachain.fftfilterbank.f = [200 1000 2000 4000]
# 6 Frequency bands
# mha.overlapadd.mhachain.fftfilterbank.f = [200 1000 1500 2000 4000 6000]
# 8 Frequency bands
# mha.overlapadd.mhachain.fftfilterbank.f = [200 1000 1500 2000 3000 4000 5500 7000]

# gaintable data in dB gains
# Here the number of "[0 0]" separetd by ";" must be the value of 'nchannels_in' 
# given in line 1 times the number of frequency channels which is the number of
# entries in 'mha.overlapadd.mhachain.fftfilterbank.f' in line 32 
# 2 Frequency bands
mha.overlapadd.mhachain.dc.gtdata = [[0 0];[0 0];[0 0];[0 0]]
# 4 Frequency bands
# mha.overlapadd.mhachain.dc.gtdata = [[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0]]
# 6 Frequency bands
# mha.overlapadd.mhachain.dc.gtdata = [[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0]]
# 8 Frequency bands
# mha.overlapadd.mhachain.dc.gtdata = [[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0];[0 0]]


# input level for first gain entry in dB SPL
mha.overlapadd.mhachain.dc.gtmin = [0]

# level step size in dB
mha.overlapadd.mhachain.dc.gtstep = [40]

# attack time constant in s
mha.overlapadd.mhachain.dc.tau_attack = [0.02]

# decay time constant in s
mha.overlapadd.mhachain.dc.tau_decay = [0.1]

# Name of fftfilterbank plugin.  Used to extract frequency information.
mha.overlapadd.mhachain.dc.fb = fftfilterbank
mha.overlapadd.mhachain.dc.chname = fftfilterbank_nchannels
mha.overlapadd.mhachain.combinechannels.outchannels = 2


io.con_in = [system:capture_1 system:capture_5]
io.con_out = [system:playback_1 system:playback_5]