nchannels_in=4
srate=48000
fragsize=110

iolib=MHAIOJack
io.con_in=[system:capture_1 system:capture_2 system:capture_1 system:capture_2]
io.con_out=[system:playback_1 system:playback_2 system:playback_1 system:playback_2]


mhalib = mhachain
mha.algos=[downsample transducers gain:volume_control upsample]

mha.downsample.antialias.A = [1 -1.4797 1.4037 -0.6809 0.1919 -0.0221]
mha.downsample.antialias.B = [0.0129 0.0645 0.129 0.129 0.0645 0.0129]
mha.upsample.antialias.A = [1 -1.4797 1.4037 -0.6809 0.1919 -0.0221]
mha.upsample.antialias.B = [0.0129 0.0645 0.129 0.129 0.0645 0.0129]
mha.downsample.ratio=2
mha.upsample.ratio=2
